CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['This is using RGB to CMYK yellow channel to measure intensity and includes AEC extracted + Nuclei overlay for gating references. Working! 3/8/2018']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Type>V_).*(?P<ROI>ROI..)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Type>MASK).*(?P<ROI>ROI..)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Slide>[A-Z]{4}._[0-9]{1}_[0-9]{3})
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:19
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C11R3") (file does startwith "V_NUCLEI")
    Name to assign these images:A10_DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C01R2")
    Name to assign these images:A18_PDL1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C01R1")
    Name to assign these images:A17_PD1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C02R1")
    Name to assign these images:A14_HLAII
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C02R2")
    Name to assign these images:A09_DCLAMP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C03R2")
    Name to assign these images:A05_CD45
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C04R1")
    Name to assign these images:A08_CD8
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C05R2")
    Name to assign these images:A03_CD20
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C05R1")
    Name to assign these images:A13_GRZB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C06R1")
    Name to assign these images:A07_CD68
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C07R1")
    Name to assign these images:A06_CD66b
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C07R2")
    Name to assign these images:A01_CD11c
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C08R1")
    Name to assign these images:A02_CD163
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C10R1")
    Name to assign these images:A12_FOXP3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C09R1")
    Name to assign these images:A11_EOMES
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C11R2")
    Name to assign these images:A16_PANCK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C11R1")
    Name to assign these images:A15_Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C03R1")
    Name to assign these images:A04_CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "MASK")
    Name to assign these images:MASK
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Slide
    Metadata category:ROI

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:MASK
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):9,20
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:150
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:6|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
    Hidden:18
    Select an image to measure:A01_CD11c
    Select an image to measure:A02_CD163
    Select an image to measure:A03_CD20
    Select an image to measure:A04_CD3
    Select an image to measure:A05_CD45
    Select an image to measure:A06_CD66b
    Select an image to measure:A07_CD68
    Select an image to measure:A08_CD8
    Select an image to measure:A09_DCLAMP
    Select an image to measure:A10_DNA
    Select an image to measure:A11_EOMES
    Select an image to measure:A12_FOXP3
    Select an image to measure:A13_GRZB
    Select an image to measure:A14_HLAII
    Select an image to measure:A15_Ki67
    Select an image to measure:A16_PANCK
    Select an image to measure:A17_PD1
    Select an image to measure:A18_PDL1
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:8|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
    Select the input objects:Nuclei
    Name the output image:Nuclei
    Select the color format:uint16
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:Nuclei
    Select method for constructing file names:Single name
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    Enter single file name:Tiff_\g<Slide>\g<ROI>
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Slide>\\Processed\\\g<ROI>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\g<Slide>\\Processed\\\g<ROI>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Intensity_MeanIntensity_A15_Ki67,Nuclei|Intensity_MeanIntensity_A14_HLAII,Nuclei|Intensity_MeanIntensity_A08_CD8,Nuclei|Intensity_MeanIntensity_A16_PANCK,Nuclei|Intensity_MeanIntensity_A11_EOMES,Nuclei|Intensity_MeanIntensity_A10_DNA,Nuclei|Intensity_MeanIntensity_A13_GRZB,Nuclei|Intensity_MeanIntensity_A12_FOXP3,Nuclei|Intensity_MeanIntensity_A02_CD163,Nuclei|Intensity_MeanIntensity_A01_CD11c,Nuclei|Intensity_MeanIntensity_A06_CD66b,Nuclei|Intensity_MeanIntensity_A18_PDL1,Nuclei|Intensity_MeanIntensity_A04_CD3,Nuclei|Intensity_MeanIntensity_A05_CD45,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei_\g<Slide>\g<ROI>.cpout
    Use the object name for the file name?:No

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\g<Slide>\\Processed\\\g<ROI>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_Nuclei,Image|Group_Index,Image|Group_Number,Image|ModuleError_01Images,Image|ModuleError_04Groups,Image|ModuleError_08ConvertObjectsToImage,Image|ModuleError_02Metadata,Image|ModuleError_06MeasureObjectIntensity,Image|ModuleError_03NamesAndTypes,Image|ModuleError_09SaveImages,Image|ModuleError_05IdentifyPrimaryObjects,Image|ModuleError_07MeasureObjectSizeShape,Image|ExecutionTime_01Images,Image|ExecutionTime_04Groups,Image|ExecutionTime_08ConvertObjectsToImage,Image|ExecutionTime_02Metadata,Image|ExecutionTime_06MeasureObjectIntensity,Image|ExecutionTime_03NamesAndTypes,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image_\g<Slide>\g<ROI>.cptoc
    Use the object name for the file name?:No

CreateBatchFiles:[module_num:12|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/Volumes/coussens-secure/Multiplex_IHC_studies/HTAN/9_2and9_3/Slides
    Cluster root path:mnt/coussens-secure/Multiplex_IHC_studies/HTAN/9_2and9_3/Slides
